<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:xlink="http://www.w3.org/1999/xlink" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:semsim="http://www.bhi.washington.edu/SemSim#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="model_0" cmeta:id="metaid0">
  <units name="J_s2_per_m6">
    <unit exponent="-6.0" units="metre" />
    <unit exponent="2.0" units="second" />
    <unit units="joule" />
  </units>
  <units name="J_s_per_m3">
    <unit units="joule" />
    <unit exponent="-3.0" units="metre" />
    <unit units="second" />
  </units>
  <units name="per_m">
    <unit exponent="-1.0" units="metre" />
  </units>
  <units name="J_s2_per_m5">
    <unit units="joule" />
    <unit exponent="2.0" units="second" />
    <unit exponent="-5.0" units="metre" />
  </units>
  <units name="per_s">
    <unit exponent="-1.0" units="second" />
  </units>
  <units name="J_per_m3">
    <unit units="joule" />
    <unit exponent="-3.0" units="metre" />
  </units>
  <units name="mm">
    <unit prefix="milli" units="metre" />
  </units>
  <units name="per_m3">
    <unit exponent="-3.0" units="metre" />
  </units>
  <units name="s_per_m3">
    <unit units="second" />
    <unit exponent="-3.0" units="metre" />
  </units>
  <units name="J_per_m">
    <unit units="joule" />
    <unit exponent="-1.0" units="metre" />
  </units>
  <units name="J_s_per_m6">
    <unit units="joule" />
    <unit exponent="-6.0" units="metre" />
    <unit units="second" />
  </units>
  <units name="m3_per_s">
    <unit exponent="-1.0" units="second" />
    <unit exponent="3.0" units="metre" />
  </units>
  <units name="m6_per_J">
    <unit exponent="-1.0" units="joule" />
    <unit exponent="6.0" units="metre" />
  </units>
  <component name="aortic_arch_I">
    <variable cmeta:id="aortic_arch_I.t" name="t" public_interface="in" units="second" />
    <variable cmeta:id="aortic_arch_I.mu" initial_value="0.004" name="mu" units="J_s_per_m3" />
    <variable cmeta:id="aortic_arch_I.rho" initial_value="1050" name="rho" units="J_s2_per_m5" />
    <variable cmeta:id="aortic_arch_I.E" initial_value="0.6e+6" name="E" units="J_per_m3" />
    <variable cmeta:id="aortic_arch_I.l_aortic_arch_I" initial_value="7.785e-03" name="l_aortic_arch_I" units="metre" />
    <variable cmeta:id="aortic_arch_I.h" name="h" units="metre" />
    <variable cmeta:id="aortic_arch_I.r_aortic_arch_I" initial_value="3.56e-03" name="r_aortic_arch_I" units="metre" />
    <variable cmeta:id="aortic_arch_I.I" name="I" units="J_s2_per_m6" />
    <variable cmeta:id="aortic_arch_I.C" name="C" units="m6_per_J" />
    <variable cmeta:id="aortic_arch_I.R" name="R" units="J_s_per_m6" />
    <variable cmeta:id="aortic_arch_I.R_v" name="R_v" units="J_s_per_m6" />
    <variable cmeta:id="aortic_arch_I.a" initial_value="0.2802" name="a" units="dimensionless" />
    <variable cmeta:id="aortic_arch_I.b" initial_value="-505.3" name="b" units="per_m" />
    <variable cmeta:id="aortic_arch_I.c" initial_value="0.1324" name="c" units="dimensionless" />
    <variable cmeta:id="aortic_arch_I.d" initial_value="-11.14" name="d" units="per_m" />
    <variable cmeta:id="aortic_arch_I.u_in" name="u_in" public_interface="in" units="J_per_m3" />
    <variable cmeta:id="aortic_arch_I.v" initial_value="0.0" name="v" units="m3_per_s" />
    <variable cmeta:id="aortic_arch_I.u" name="u" units="J_per_m3" />
    <variable cmeta:id="aortic_arch_I.u_C" initial_value="0.0" name="u_C" units="J_per_m3" />
    <variable cmeta:id="aortic_arch_I.v_d" initial_value="0.0" name="v_d" units="m3_per_s" />
    <variable cmeta:id="aortic_arch_I.u_out" initial_value="0.0" name="u_out" units="J_per_m3" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>h</ci>
        <apply>
          <times />
          <ci>r_aortic_arch_I</ci>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>a</ci>
              <apply>
                <exp />
                <apply>
                  <times />
                  <ci>b</ci>
                  <ci>r_aortic_arch_I</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <times />
              <ci>c</ci>
              <apply>
                <exp />
                <apply>
                  <times />
                  <ci>d</ci>
                  <ci>r_aortic_arch_I</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>I</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>rho</ci>
            <ci>l_aortic_arch_I</ci>
          </apply>
          <apply>
            <times />
            <pi />
            <apply>
              <power />
              <ci>r_aortic_arch_I</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>C</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
            <pi />
            <apply>
              <power />
              <ci>r_aortic_arch_I</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">3</cn>
            </apply>
            <ci>l_aortic_arch_I</ci>
          </apply>
          <apply>
            <times />
            <ci>E</ci>
            <ci>h</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>R</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">8</cn>
            <ci>mu</ci>
            <ci>l_aortic_arch_I</ci>
          </apply>
          <apply>
            <times />
            <pi />
            <apply>
              <power />
              <ci>r_aortic_arch_I</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">4</cn>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>R_v</ci>
        <apply>
          <divide />
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="second">0.01</cn>
          <ci>C</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>v</ci>
        </apply>
        <apply>
          <divide />
          <apply>
            <minus />
            <apply>
              <minus />
              <ci>u_in</ci>
              <ci>u</ci>
            </apply>
            <apply>
              <times />
              <apply>
                <divide />
                <ci>R</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
              </apply>
              <ci>v</ci>
            </apply>
          </apply>
          <apply>
            <divide />
            <ci>I</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>u_C</ci>
        </apply>
        <apply>
          <divide />
          <apply>
            <minus />
            <ci>v</ci>
            <ci>v_d</ci>
          </apply>
          <ci>C</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>u</ci>
        <apply>
          <plus />
          <ci>u_C</ci>
          <apply>
            <times />
            <ci>R_v</ci>
            <apply>
              <minus />
              <ci>v</ci>
              <ci>v_d</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>v_d</ci>
        </apply>
        <apply>
          <divide />
          <apply>
            <minus />
            <apply>
              <minus />
              <ci>u</ci>
              <ci>u_out</ci>
            </apply>
            <apply>
              <times />
              <apply>
                <divide />
                <ci>R</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
              </apply>
              <ci>v_d</ci>
            </apply>
          </apply>
          <apply>
            <divide />
            <ci>I</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="aortic_arch_I_module" />
  <component name="block1" />
  <component name="aortic_root">
    <variable cmeta:id="aortic_root.t" name="t" units="second" />
    <variable cmeta:id="aortic_root.mu" initial_value="0.004" name="mu" units="J_s_per_m3" />
    <variable cmeta:id="aortic_root.rho" initial_value="1050" name="rho" units="J_s2_per_m5" />
    <variable cmeta:id="aortic_root.E" initial_value="0.6e+6" name="E" units="J_per_m3" />
    <variable cmeta:id="aortic_root.l_aortic_root" initial_value="12.0e-03" name="l_aortic_root" units="metre" />
    <variable cmeta:id="aortic_root.h" name="h" units="metre" />
    <variable cmeta:id="aortic_root.r_aortic_root" initial_value="6.43e-03" name="r_aortic_root" units="metre" />
    <variable cmeta:id="aortic_root.I" name="I" units="J_s2_per_m6" />
    <variable cmeta:id="aortic_root.C" name="C" units="m6_per_J" />
    <variable cmeta:id="aortic_root.R" name="R" units="J_s_per_m6" />
    <variable cmeta:id="aortic_root.R_v" name="R_v" units="J_s_per_m6" />
    <variable cmeta:id="aortic_root.a" initial_value="0.2802" name="a" units="dimensionless" />
    <variable cmeta:id="aortic_root.b" initial_value="-505.3" name="b" units="per_m" />
    <variable cmeta:id="aortic_root.c" initial_value="0.1324" name="c" units="dimensionless" />
    <variable cmeta:id="aortic_root.d" initial_value="-11.14" name="d" units="per_m" />
    <variable cmeta:id="aortic_root.v_in" name="v_in" units="m3_per_s" />
    <variable cmeta:id="aortic_root.u" name="u" units="J_per_m3" />
    <variable cmeta:id="aortic_root.u_C" initial_value="0.0" name="u_C" units="J_per_m3" />
    <variable cmeta:id="aortic_root.v" initial_value="0.0" name="v" units="m3_per_s" />
    <variable cmeta:id="aortic_root.u_d" name="u_d" units="J_per_m3" />
    <variable cmeta:id="aortic_root.u_C_d" initial_value="0.0" name="u_C_d" units="J_per_m3" />
    <variable cmeta:id="aortic_root.v_out" name="v_out" public_interface="in" units="m3_per_s" />
    <variable cmeta:id="aortic_root.mt" name="mt" units="second" />
    <variable cmeta:id="aortic_root.T" initial_value="1.0" name="T" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>h</ci>
        <apply>
          <times />
          <ci>r_aortic_root</ci>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>a</ci>
              <apply>
                <exp />
                <apply>
                  <times />
                  <ci>b</ci>
                  <ci>r_aortic_root</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <times />
              <ci>c</ci>
              <apply>
                <exp />
                <apply>
                  <times />
                  <ci>d</ci>
                  <ci>r_aortic_root</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>I</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>rho</ci>
            <ci>l_aortic_root</ci>
          </apply>
          <apply>
            <times />
            <pi />
            <apply>
              <power />
              <ci>r_aortic_root</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>C</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
            <pi />
            <apply>
              <power />
              <ci>r_aortic_root</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">3</cn>
            </apply>
            <ci>l_aortic_root</ci>
          </apply>
          <apply>
            <times />
            <ci>E</ci>
            <ci>h</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>R</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">8</cn>
            <ci>mu</ci>
            <ci>l_aortic_root</ci>
          </apply>
          <apply>
            <times />
            <pi />
            <apply>
              <power />
              <ci>r_aortic_root</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">4</cn>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>R_v</ci>
        <apply>
          <divide />
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="second">0.01</cn>
          <ci>C</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>v</ci>
        </apply>
        <apply>
          <divide />
          <apply>
            <minus />
            <apply>
              <minus />
              <ci>u</ci>
              <ci>u_d</ci>
            </apply>
            <apply>
              <times />
              <ci>R</ci>
              <ci>v</ci>
            </apply>
          </apply>
          <ci>I</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>u_C</ci>
        </apply>
        <apply>
          <divide />
          <apply>
            <minus />
            <ci>v_in</ci>
            <ci>v</ci>
          </apply>
          <apply>
            <divide />
            <ci>C</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>u_C_d</ci>
        </apply>
        <apply>
          <divide />
          <apply>
            <minus />
            <ci>v</ci>
            <ci>v_out</ci>
          </apply>
          <apply>
            <divide />
            <ci>C</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>u</ci>
        <apply>
          <plus />
          <ci>u_C</ci>
          <apply>
            <times />
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
            <ci>R_v</ci>
            <apply>
              <minus />
              <ci>v_in</ci>
              <ci>v</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>u_d</ci>
        <apply>
          <plus />
          <ci>u_C_d</ci>
          <apply>
            <times />
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
            <ci>R_v</ci>
            <apply>
              <minus />
              <ci>v</ci>
              <ci>v_out</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>mt</ci>
        <apply>
          <minus />
          <ci>t</ci>
          <apply>
            <times />
            <ci>T</ci>
            <apply>
              <floor />
              <apply>
                <divide />
                <ci>t</ci>
                <ci>T</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>v_in</ci>
        <piecewise>
          <piece>
            <apply>
              <times />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="m3_per_s" type="e-notation">
                0.1
                <sep />
                -6
              </cn>
              <apply>
                <sin />
                <apply>
                  <divide />
                  <apply>
                    <times />
                    <pi />
                    <ci>mt</ci>
                  </apply>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="second">0.3</cn>
                </apply>
              </apply>
            </apply>
            <apply>
              <leq />
              <ci>mt</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="second">0.3</cn>
            </apply>
          </piece>
          <piece>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="m3_per_s">0.0</cn>
            <apply>
              <gt />
              <ci>mt</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="second">0.3</cn>
            </apply>
          </piece>
        </piecewise>
      </apply>
    </math>
  </component>
  <component name="aortic_root_module" />
  <component name="ascending_aorta_module" />
  <component name="ascending_aorta">
    <variable cmeta:id="ascending_aorta.t" name="t" public_interface="in" units="second" />
    <variable cmeta:id="ascending_aorta.mu" initial_value="0.004" name="mu" units="J_s_per_m3" />
    <variable cmeta:id="ascending_aorta.rho" initial_value="1050" name="rho" units="J_s2_per_m5" />
    <variable cmeta:id="ascending_aorta.E" initial_value="0.6e+6" name="E" units="J_per_m3" />
    <variable cmeta:id="ascending_aorta.l_ascending_aorta" initial_value="12.33e-03" name="l_ascending_aorta" units="metre" />
    <variable cmeta:id="ascending_aorta.h" name="h" units="metre" />
    <variable cmeta:id="ascending_aorta.r_ascending_aorta" initial_value="5.03e-03" name="r_ascending_aorta" units="metre" />
    <variable cmeta:id="ascending_aorta.I" name="I" units="J_s2_per_m6" />
    <variable cmeta:id="ascending_aorta.C" name="C" units="m6_per_J" />
    <variable cmeta:id="ascending_aorta.R" name="R" units="J_s_per_m6" />
    <variable cmeta:id="ascending_aorta.R_v" name="R_v" units="J_s_per_m6" />
    <variable cmeta:id="ascending_aorta.a" initial_value="0.2802" name="a" units="dimensionless" />
    <variable cmeta:id="ascending_aorta.b" initial_value="-505.3" name="b" units="per_m" />
    <variable cmeta:id="ascending_aorta.c" initial_value="0.1324" name="c" units="dimensionless" />
    <variable cmeta:id="ascending_aorta.d" initial_value="-11.14" name="d" units="per_m" />
    <variable cmeta:id="ascending_aorta.u_in" name="u_in" public_interface="in" units="J_per_m3" />
    <variable cmeta:id="ascending_aorta.v" initial_value="0.0" name="v" units="m3_per_s" />
    <variable cmeta:id="ascending_aorta.u" name="u" units="J_per_m3" />
    <variable cmeta:id="ascending_aorta.u_C" initial_value="0.0" name="u_C" units="J_per_m3" />
    <variable cmeta:id="ascending_aorta.v_out_1" name="v_out_1" public_interface="in" units="m3_per_s" />
    <variable cmeta:id="ascending_aorta.v_out_2" name="v_out_2" public_interface="in" units="m3_per_s" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>h</ci>
        <apply>
          <times />
          <ci>r_ascending_aorta</ci>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>a</ci>
              <apply>
                <exp />
                <apply>
                  <times />
                  <ci>b</ci>
                  <ci>r_ascending_aorta</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <times />
              <ci>c</ci>
              <apply>
                <exp />
                <apply>
                  <times />
                  <ci>d</ci>
                  <ci>r_ascending_aorta</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>I</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>rho</ci>
            <ci>l_ascending_aorta</ci>
          </apply>
          <apply>
            <times />
            <pi />
            <apply>
              <power />
              <ci>r_ascending_aorta</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>C</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
            <pi />
            <apply>
              <power />
              <ci>r_ascending_aorta</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">3</cn>
            </apply>
            <ci>l_ascending_aorta</ci>
          </apply>
          <apply>
            <times />
            <ci>E</ci>
            <ci>h</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>R</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">8</cn>
            <ci>mu</ci>
            <ci>l_ascending_aorta</ci>
          </apply>
          <apply>
            <times />
            <pi />
            <apply>
              <power />
              <ci>r_ascending_aorta</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">4</cn>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>R_v</ci>
        <apply>
          <divide />
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="second">0.01</cn>
          <ci>C</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>v</ci>
        </apply>
        <apply>
          <divide />
          <apply>
            <minus />
            <apply>
              <minus />
              <ci>u_in</ci>
              <ci>u</ci>
            </apply>
            <apply>
              <times />
              <ci>R</ci>
              <ci>v</ci>
            </apply>
          </apply>
          <ci>I</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>u_C</ci>
        </apply>
        <apply>
          <divide />
          <apply>
            <minus />
            <apply>
              <minus />
              <ci>v</ci>
              <ci>v_out_1</ci>
            </apply>
            <ci>v_out_2</ci>
          </apply>
          <ci>C</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>u</ci>
        <apply>
          <plus />
          <ci>u_C</ci>
          <apply>
            <times />
            <ci>R_v</ci>
            <apply>
              <minus />
              <apply>
                <minus />
                <ci>v</ci>
                <ci>v_out_1</ci>
              </apply>
              <ci>v_out_2</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="block2" />
  <component name="brachiocephalic_module" />
  <component name="brachiocephalic">
    <variable cmeta:id="brachiocephalic.t" name="t" public_interface="in" units="second" />
    <variable cmeta:id="brachiocephalic.mu" initial_value="0.004" name="mu" units="J_s_per_m3" />
    <variable cmeta:id="brachiocephalic.rho" initial_value="1050" name="rho" units="J_s2_per_m5" />
    <variable cmeta:id="brachiocephalic.E" initial_value="0.6e+6" name="E" units="J_per_m3" />
    <variable cmeta:id="brachiocephalic.l_brachiocephalic" initial_value="15.74e-03" name="l_brachiocephalic" units="metre" />
    <variable cmeta:id="brachiocephalic.h" name="h" units="metre" />
    <variable cmeta:id="brachiocephalic.r_brachiocephalic" initial_value="2.75e-03" name="r_brachiocephalic" units="metre" />
    <variable cmeta:id="brachiocephalic.I" name="I" units="J_s2_per_m6" />
    <variable cmeta:id="brachiocephalic.C" name="C" units="m6_per_J" />
    <variable cmeta:id="brachiocephalic.R" name="R" units="J_s_per_m6" />
    <variable cmeta:id="brachiocephalic.R_v" name="R_v" units="J_s_per_m6" />
    <variable cmeta:id="brachiocephalic.a" initial_value="0.2802" name="a" units="dimensionless" />
    <variable cmeta:id="brachiocephalic.b" initial_value="-505.3" name="b" units="per_m" />
    <variable cmeta:id="brachiocephalic.c" initial_value="0.1324" name="c" units="dimensionless" />
    <variable cmeta:id="brachiocephalic.d" initial_value="-11.14" name="d" units="per_m" />
    <variable cmeta:id="brachiocephalic.u_in" name="u_in" public_interface="in" units="J_per_m3" />
    <variable cmeta:id="brachiocephalic.v" initial_value="0.0" name="v" units="m3_per_s" />
    <variable cmeta:id="brachiocephalic.u" name="u" units="J_per_m3" />
    <variable cmeta:id="brachiocephalic.u_C" initial_value="0.0" name="u_C" units="J_per_m3" />
    <variable cmeta:id="brachiocephalic.v_d" initial_value="0.0" name="v_d" units="m3_per_s" />
    <variable cmeta:id="brachiocephalic.u_out" initial_value="0.0" name="u_out" units="J_per_m3" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>h</ci>
        <apply>
          <times />
          <ci>r_brachiocephalic</ci>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>a</ci>
              <apply>
                <exp />
                <apply>
                  <times />
                  <ci>b</ci>
                  <ci>r_brachiocephalic</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <times />
              <ci>c</ci>
              <apply>
                <exp />
                <apply>
                  <times />
                  <ci>d</ci>
                  <ci>r_brachiocephalic</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>I</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>rho</ci>
            <ci>l_brachiocephalic</ci>
          </apply>
          <apply>
            <times />
            <pi />
            <apply>
              <power />
              <ci>r_brachiocephalic</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>C</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
            <pi />
            <apply>
              <power />
              <ci>r_brachiocephalic</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">3</cn>
            </apply>
            <ci>l_brachiocephalic</ci>
          </apply>
          <apply>
            <times />
            <ci>E</ci>
            <ci>h</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>R</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">8</cn>
            <ci>mu</ci>
            <ci>l_brachiocephalic</ci>
          </apply>
          <apply>
            <times />
            <pi />
            <apply>
              <power />
              <ci>r_brachiocephalic</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">4</cn>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>R_v</ci>
        <apply>
          <divide />
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="second">0.01</cn>
          <ci>C</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>v</ci>
        </apply>
        <apply>
          <divide />
          <apply>
            <minus />
            <apply>
              <minus />
              <ci>u_in</ci>
              <ci>u</ci>
            </apply>
            <apply>
              <times />
              <apply>
                <divide />
                <ci>R</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
              </apply>
              <ci>v</ci>
            </apply>
          </apply>
          <apply>
            <divide />
            <ci>I</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>u_C</ci>
        </apply>
        <apply>
          <divide />
          <apply>
            <minus />
            <ci>v</ci>
            <ci>v_d</ci>
          </apply>
          <ci>C</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>u</ci>
        <apply>
          <plus />
          <ci>u_C</ci>
          <apply>
            <times />
            <ci>R_v</ci>
            <apply>
              <minus />
              <ci>v</ci>
              <ci>v_d</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>v_d</ci>
        </apply>
        <apply>
          <divide />
          <apply>
            <minus />
            <apply>
              <minus />
              <ci>u</ci>
              <ci>u_out</ci>
            </apply>
            <apply>
              <times />
              <apply>
                <divide />
                <ci>R</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
              </apply>
              <ci>v_d</ci>
            </apply>
          </apply>
          <apply>
            <divide />
            <ci>I</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <group>
    <relationship_ref relationship="encapsulation" />
    <component_ref component="brachiocephalic_module">
      <component_ref component="brachiocephalic" />
    </component_ref>
    <component_ref component="block2">
      <component_ref component="block1">
        <component_ref component="aortic_root_module">
          <component_ref component="aortic_root" />
        </component_ref>
        <component_ref component="ascending_aorta_module">
          <component_ref component="ascending_aorta" />
        </component_ref>
      </component_ref>
      <component_ref component="aortic_arch_I_module">
        <component_ref component="aortic_arch_I" />
      </component_ref>
    </component_ref>
  </group>
  <connection>
    <map_components component_1="ascending_aorta" component_2="brachiocephalic" />
    <map_variables variable_1="u" variable_2="u_in" />
  </connection>
  <connection>
    <map_components component_1="aortic_root" component_2="aortic_arch_I" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="ascending_aorta" component_2="aortic_arch_I" />
    <map_variables variable_1="u" variable_2="u_in" />
  </connection>
  <connection>
    <map_components component_1="aortic_arch_I" component_2="ascending_aorta" />
    <map_variables variable_1="v" variable_2="v_out_1" />
  </connection>
  <connection>
    <map_components component_1="aortic_root" component_2="brachiocephalic" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="brachiocephalic" component_2="ascending_aorta" />
    <map_variables variable_1="v" variable_2="v_out_2" />
  </connection>
  <connection>
    <map_components component_1="aortic_root" component_2="ascending_aorta" />
    <map_variables variable_1="u" variable_2="u_in" />
    <map_variables variable_1="t" variable_2="t" />
  </connection>
  <connection>
    <map_components component_1="ascending_aorta" component_2="aortic_root" />
    <map_variables variable_1="v" variable_2="v_out" />
  </connection>
  <rdf:RDF xmlns:bqmodel="http://biomodels.net/model-qualifiers/" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:ro="http://www.obofoundry.org/ro/ro.owl#" xmlns:opb="http://bhi.washington.edu/OPB#">
    <rdf:Description rdf:about="#aortic_arch_I.u_in">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_0">
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00509" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#ascending_aorta.u">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_7">
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00509" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#aortic_root.u">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_3">
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00509" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#brachiocephalic.v">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_11">
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00299" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#metaid0" semsim:modelName="model_0">
      <semsim:modelName>aortic_arch_I_module</semsim:modelName>
    </rdf:Description>
    <rdf:Description rdf:about="#aortic_root.t">
      <bqbiol:is rdf:resource="https://identifiers.org/opb/OPB_01023" />
    </rdf:Description>
    <rdf:Description rdf:about="#brachiocephalic.t">
      <bqbiol:is rdf:resource="https://identifiers.org/opb/OPB_01023" />
    </rdf:Description>
    <rdf:Description rdf:about="#ascending_aorta.v_out_2">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_9">
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00299" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#brachiocephalic.u_in">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_10">
          <semsim:physicalPropertyOf>
            <rdf:Description rdf:about="#metaid1">
              <semsim:hasSinkParticipant>
                <rdf:Description rdf:about="#sink_0">
                  <semsim:hasPhysicalEntityReference>
                    <rdf:Description rdf:about="#entity_1">
                      <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/fma/FMA:3768" />
                    </rdf:Description>
                  </semsim:hasPhysicalEntityReference>
                </rdf:Description>
              </semsim:hasSinkParticipant>
              <semsim:hasSourceParticipant>
                <rdf:Description rdf:about="#source_0">
                  <semsim:hasPhysicalEntityReference>
                    <rdf:Description rdf:about="#entity_0">
                      <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/fma/FMA:3736" />
                    </rdf:Description>
                  </semsim:hasPhysicalEntityReference>
                </rdf:Description>
              </semsim:hasSourceParticipant>
            </rdf:Description>
          </semsim:physicalPropertyOf>
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00509" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#ascending_aorta.t">
      <bqbiol:is rdf:resource="https://identifiers.org/opb/OPB_01023" />
    </rdf:Description>
    <rdf:Description rdf:about="#aortic_arch_I.v">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_1">
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00299" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#aortic_root.v_out">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_4">
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00299" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#ascending_aorta.v_out_1">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_8">
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00299" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#aortic_root.v_in">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_2">
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00299" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#aortic_arch_I.t">
      <bqbiol:is rdf:resource="https://identifiers.org/opb/OPB_01023" />
    </rdf:Description>
    <rdf:Description rdf:about="#aortic_arch_I.t">
      <bqbiol:is rdf:resource="https://identifiers.org/opb/OPB_01023" />
    </rdf:Description>
    <rdf:Description rdf:about="#ascending_aorta.u_in">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_5">
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00509" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#ascending_aorta.t">
      <bqbiol:is rdf:resource="https://identifiers.org/opb/OPB_01023" />
    </rdf:Description>
    <rdf:Description rdf:about="#ascending_aorta.v">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_6">
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00299" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#aortic_root.t">
      <bqbiol:is rdf:resource="https://identifiers.org/opb/OPB_01023" />
    </rdf:Description>
  </rdf:RDF>
</model>

